# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: PSICT MultiPulse

# The version string should be updated whenever changes are made to the driver files
version: 0.1.17

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: PSICT_MultiPulse

# Define that this driver is a signal generator without hardware communication
signal_generator: True

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
##############################################################################
## Inputs
##############################################################################

## General settings

[Sample rate]
datatype: DOUBLE
def_value: 1E9
group: Waveform
section: Waveform
show_in_measurement_dlg: True

[Number of points]
datatype: DOUBLE
def_value: 4E3
group: Waveform
section: Waveform
show_in_measurement_dlg: True

[Use fixed number of points]
datatype: BOOLEAN
def_value: True
group: Waveform
section: Waveform
show_in_measurement_dlg: True

[Truncation range]
datatype: DOUBLE
def_value: 3
group: Waveform
section: Waveform
show_in_measurement_dlg: True

[Generate from final pulse]
datatype: BOOLEAN
def_value: False
group: Advanced
section: Waveform
show_in_measurement_dlg: True

[Final pulse time]
datatype: DOUBLE
def_value: 0
group: Advanced
section: Waveform
show_in_measurement_dlg: True

## Pulse sequence and options

[Pulse definitions file]
datatype: PATH
group: Specification paths
section: Waveform
show_in_measurement_dlg: True

[Pulse sequences file]
datatype: PATH
group: Specification paths
section: Waveform
show_in_measurement_dlg: True

[Pulse sequence counter]
datatype: DOUBLE
def_value: 0
group: Runtime
section: Waveform
show_in_measurement_dlg: True

## Test fields

[TestField01]
datatype: COMBO
combo_def_1: Choice 1
combo_def_2: Choice 2
group: Input types
section: Driver tests
show_in_measurement_dlg: True

[TestField02]
datatype: DOUBLE
def_value: 12E3
group: Input types
section: Driver tests
show_in_measurement_dlg: True

[TestField03]
datatype: BOOLEAN
def_value: 0
group: Input types
section: Driver tests
show_in_measurement_dlg: True


##############################################################################
## Outputs
##############################################################################

[Trace 1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True

[Trace 2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True

[Trace 3]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True

[Trace 4]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True
